PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = 'data/%s/%s_%s_%s_%s' %(expInfo['Participant'],expName, expInfo['Session'],expInfo['Block'],expInfo['date'])
  Enable Escape = False
  Experiment info = {'Participant': '', 'Session': '', 'Block': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 720]
  expName = SoA_main
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Routines
  Routine welcome_main
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, event
        curPos = -0.5
      Begin Routine:
        event.Mouse(visible=False)
    TextComponent Instructions_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        In this block, you have to report the time interval between your button click and the motion onset of the ball on the screen.

        On each trial you have to choose in which direction you want to move the ball either left or right.

        When you are ready you can choose left or right option. After a variable delay of button click, you will see the ball moving. The ball may move in your intended direction or may move in opposite direction.

        You have to report the delay between your button click and when the ball started moving by choosing the number between 0ms to 1000ms.

        You also have to report about much control you experienced over the ball, by selecting  a number between “No control” to "Full control”.

        You also have to report if the ball moved in your intended direction or not.

        Press SPACEBAR to continue.
    KeyboardComponent Inst_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedb
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  Routine target_main
    ImageComponent background_3
      image = Field.jpg
      opacity = .5
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    PolygonComponent polygon3
      disabled = True
      fillColor [set every repeat] = $fillColor
      lineColor [set every repeat] = $fillColor
      lineWidth = 4
      nVertices = 90
      opacity [set every repeat] = 1
      pos [set every repeat] = $xpos
      shape = regular polygon...
      size = [3,3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
      units = cm
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    ImageComponent post_left_3
      image = post.png
      opacity = leftOpacity
      pos = (-.73, -0.29)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    ImageComponent post_right_3
      flipHoriz = True
      image = post.png
      opacity = rightOpacity
      pos = (.73, -0.29)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    ImageComponent football_3
      image = football.png
      pos [set every repeat] = $xpos_fb
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
      units = height
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    ImageComponent leftGesture_3
      image = Power_Front.png
      ori = 90
      pos = (-0.25, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    ImageComponent rightGesture_3
      image = OpenHand_Front.png
      ori = 90
      pos = (0.25, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    PolygonComponent leftBar_3
      fillColor = white
      pos [set every repeat] = $lpos
      shape = rectangle
      size [set every repeat] = $lh
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    PolygonComponent rightBar_3
      fillColor = white
      pos [set every repeat] = $rpos
      shape = rectangle
      size [set every repeat] = $rh
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
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    TextComponent Instructions_6
      letterHeight = 0.08
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.017
      text = Which direction do you wish to move the ball?
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  Routine resp_main
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, event
        timeTicks = range(1,1000)
      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))

        timeValue = 0;
      Each Frame:
        if timing_slider.getMarkerPos():
            timeValue = round(timing_slider.getMarkerPos(),0)
      End Routine:
        thisExp.addData('SubmittedTimeRating', timeValue)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    RatingScaleComponent delay_rating_main
      disabled = True
      forceEndRoutine = True
      high = 2000
      labels = 0ms, 2000ms
      low = 0
      pos = 0, -0.4
      scaleDescription = What was the delay between the keypress and the motion onset?
      size = 1.0
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    SliderComponent timing_slider
      forceEndRoutine = False
      granularity = 1
      labels = ('0ms', '1000ms')
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 0, 1000
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    ButtonComponent submit_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.09
      pos = (0, -0.7)
      size = (.3,.3)
      startVal [time (s)] = 0
      text = Submit
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    TextboxComponent Timetext
      bold = False
      editable = False
      letterHeight = 0.07
      pos = (0.02, -0.8)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = $str(timeValue) +"ms"
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    TextComponent timing_question
      letterHeight = 0.09
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
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      text:
        What was the delay between the buttonpress and the motion onset?
  Routine target
    PolygonComponent polygon_1
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      nVertices = 5
      shape = regular polygon...
      size = [4, 4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = cm
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  Routine fixation
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        curPos = -0.5;
      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
    TextComponent inten
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        +
    KeyboardComponent inten_key
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.60)
      size = [.2,.1]
      startVal [time (s)] = 0
      text = Click
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  Routine code_mouse
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        win.mouseVisible = False
  Routine thanks_2
    TextComponent Instructions_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Thanks for participating
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  Routine shape
    CodeComponent code_3
      Code Type = Auto->JS
      Begin Routine:
        event.Mouse(visible=True)
    PolygonComponent shape1
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      opacity [set every repeat] = $shape_s
      shape = rectangle
      size = [4,4]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent shape2
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      nVertices = 3
      opacity [set every repeat] = $shape_t
      shape = triangle
      size = [4,4]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent shape3
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      nVertices = 90
      opacity [set every repeat] = $shape_c
      shape = regular polygon...
      size = [4,4]
      startVal [time (s)] = 0.0
      units = cm
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    RatingScaleComponent wordcheck_rating
      categoryChoices = YOU, FRIEND, STRANGER
      forceEndRoutine = True
      high = 3
      low = 1
      pos = 0, -0.4
      scaleDescription = To which word this shape was associated?
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine delay
    TextComponent delay_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay
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  Routine thanks
    TextComponent Thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks for participating
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  Routine Instruction_pracIB
    CodeComponent code_4
      Code Type = Auto->JS
      Begin Experiment:
        from psychopy import core, event
      Begin Routine:
        event.Mouse(visible=False)
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        The purpose of this short experiment is to familiarize you with the procedure of the main experiment and to the timing in milliseconds range.

        In this experiment, you have to report the time interval between your button click and the presentation of the shape on the screen.

        When you are ready you can click the button on the screen.

        After variable delay of your button click, you will see a pentagon on the screen.

        The timing of the delay is randomly chosen from 0ms to 2000ms. Only for this practice session, this delay will be selected in multiples of 100ms. but this will change in main experiment where it will can be any delay between 0ms to 2000ms.

        You are supposed to give your judgment in milliseconds by appropriately selecting your interval estimates in the rating scale using the mouse. After your response, actual delay in that trial will be shown to you. You can use that information to give the better judgment in the subsequent trials.

        Please use the feedback to learn about expressing the delay in milliseconds.

        Press SPACEBAR to continue
    KeyboardComponent Inst_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_mouse_on
    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        win.mouseVisible = True
  Routine response
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
      End Routine:
        event.Mouse(visible=False)
    RatingScaleComponent delay_rating
      forceEndRoutine = False
      high = 2000
      labels = 0ms, 2000ms
      low = 0
      markerStart = 1000
      pos = 0, -0.4
      scaleDescription = What was the delay between the keypress and the target?
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine delay_main
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    ImageComponent background_2
      image = Field.jpg
      opacity = .5
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    ImageComponent post_left_2
      image = post.png
      opacity = leftOpacity
      pos = (-.73, -0.29)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    ImageComponent post_right_2
      flipHoriz = True
      image = post.png
      opacity = rightOpacity
      pos = (.73, -0.29)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    ImageComponent football_2
      image = football.png
      pos = (0, -0.19)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
      units = height
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    ImageComponent leftGesture_2
      image = Power_Front.png
      ori = 90
      pos = (-0.25, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    ImageComponent rightGesture_2
      image = OpenHand_Front.png
      ori = 90
      pos = (0.25, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    PolygonComponent leftBar_2
      fillColor = white
      pos [set every repeat] = $lpos
      shape = rectangle
      size [set every repeat] = $lh
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    PolygonComponent rightBar_2
      fillColor = white
      pos [set every repeat] = $rpos
      shape = rectangle
      size [set every repeat] = $rh
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
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    TextComponent Instructions_5
      letterHeight = 0.08
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
      text = Which direction do you wish to move the ball?
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  Routine rating_main
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
        confidenceValue = 0;
      Each Frame:
        if confidenceScale.getMarkerPos():
            confidenceValue = confidenceScale.getMarkerPos()
            confidenceValue = round(confidenceValue)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    RatingScaleComponent main_shape_check
      disabled = True
      forceEndRoutine = True
      high = 6
      labels = No Control, Full Control
      low = 1
      pos = 0, -0.4
      scaleDescription = How much control did you feel in this trial?
      size = 1.0
      startVal [time (s)] = 0.0
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    SliderComponent confidenceScale
      forceEndRoutine = False
      granularity = 1
      labels = ("No control", "Full Control")
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 1,100
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    TextboxComponent confidence_txt
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.07
      pos = (0, -0.8)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = $str(confidenceValue)
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    ButtonComponent condifence_submit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.09
      pos = (0, -0.7)
      size = (.3,.3)
      startVal [time (s)] = 0
      text = Submit
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    TextComponent Confidence_question
      letterHeight = 0.09
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
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      text:
        How much control did you feel in this trial?
  Routine intention_check
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        intentionCheck = " ";
      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
      End Routine:
        if button_no.isClicked:
            intentionCheck = 'No'
        elif button_yes.isClicked:
            intentionCheck = 'Yes'

        if intention_keys.keys == 'left':
            lh[1] += 0.02;
            lpos[1]+=0.02/2;

        elif intention_keys.keys == 'right':
            rh[1] += 0.02;
            rpos[1]+=0.02/2;

        thisExp.addData('intentionCheck', intentionCheck);
    RatingScaleComponent intention_validation
      categoryChoices = No, Yes
      disabled = True
      forceEndRoutine = True
      high = 2
      labels = No, Yes
      low = 1
      pos = 0, -0.4
      scaleDescription = Did the ball move as you intended?
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent Instructions_4
      disabled = True
      letterHeight = 0.08
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
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      text:
        Did the ball move in the intended direction?

        NO                          YES
        (press ’n’)                  (press ‘y’)
    TextComponent only_Question
      letterHeight = 0.09
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
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      text:
        Did the ball move in your intended direction?
    KeyboardComponent intention_check_key
      allowedKeys = 'y','n'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_no
      bold = True
      fillColor = darkslategrey
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-.25, -0.6)
      size = [.3,.3]
      startVal [time (s)] = 0
      text = No
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    ButtonComponent button_yes
      bold = True
      fillColor = darkslategrey
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (.25, -0.6)
      size = [.3,.3]
      startVal [time (s)] = 0
      text = Yes
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  Routine feedback
    TextComponent feedback_txt
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
      text [set every repeat] = $delayms
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  Routine intention_main
    ImageComponent background
      image = Field.jpg
      opacity = .5
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent Instructions_3
      letterHeight = 0.08
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      text = Which direction do you wish to move the ball?
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    PolygonComponent polygon3_2
      disabled = True
      fillColor [set every repeat] = $[1,1,1]
      lineWidth = 4
      nVertices = 90
      opacity [set every repeat] = 1
      pos [set every repeat] = [0,0]
      shape = regular polygon...
      size = [3,3]
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent football
      image = football.png
      pos = (0, -0.19)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent post_left
      image = post.png
      opacity = leftOpacity
      pos = (-.73, -0.29)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent post_right
      flipHoriz = True
      image = post.png
      opacity = rightOpacity
      pos = (.73, -0.29)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent choice_rating
      categoryChoices = Left, Right
      disabled = True
      forceEndRoutine = True
      high = 2
      labels = Left, Right
      low = 1
      pos = 0, -0.6
      scaleDescription = In which direction you want to move the ball in this trial?
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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    ImageComponent leftGesture
      image = Power_Front.png
      ori = 90
      pos = (-0.25, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent rightGesture
      image = OpenHand_Front.png
      ori = 90
      pos = (0.25, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button_left
      bold = True
      disabled = True
      forceEndRoutine = True
      letterHeight = 0.09
      opacity = 0
      pos = (-.25, -0.8)
      size = [.2,.2]
      startVal [time (s)] = 0
      text = Left
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    ButtonComponent button_right
      bold = True
      disabled = True
      forceEndRoutine = True
      letterHeight = 0.09
      opacity = 0
      pos = (.25, -0.8)
      size = [.2,.2]
      startVal [time (s)] = 0
      text = Right
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    KeyboardComponent intention_keys
      allowedKeys = 'left','right','escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent leftBar
      fillColor = white
      pos [set every repeat] = $lpos
      shape = rectangle
      size [set every repeat] = $lh
      startVal [time (s)] = 0.0
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    PolygonComponent rightBar
      fillColor = white
      pos [set every repeat] = $rpos
      shape = rectangle
      size [set every repeat] = $rh
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Before Experiment:
        leftOpacity = 1;
        rightOpacity = 1;

        delaymain = 0;
      Begin Experiment:
        leftCount = -1
        rightCount = -1

        leftOrder = [0,1,2,3,4,5,6,7,8,9,10,11,12,13,14, 15, 16, 17,18,19,20,21];
        leftList = ['L','L','L','L','L','L','L','L', 'L','L','L','R', 'R','R','R','R','R','R','R','R','R','R'];
        leftDelay = [0, 0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1,0, 0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1];
        shuffle(leftOrder)

        rightOrder =  [0,1,2,3,4,5,6,7,8,9,10,11,12,13,14, 15, 16, 17,18,19,20,21];
        rightList = ['L','L','L','L','L','L','L','L', 'L','L','L','R', 'R','R','R','R','R','R','R','R','R','R'];
        rightDelay = [0, 0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1,0, 0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1];
        shuffle(rightOrder)

        lh = [0.02,0.02];
        rh = [0.02,0.02];

        lpos = [-0.9,0];
        rpos = [0.9,0];
      Begin Routine:
        event.Mouse(visible=False,newPos=(0,curPos))
      End Routine:
        if intention_keys.keys == 'left':
            leftCount += 1;
            cond = leftList[leftOrder[leftCount]]
            delaymain = leftDelay[leftOrder[leftCount]]
        elif intention_keys.keys == 'right':
            rightCount += 1;
            cond = rightList[rightOrder[rightCount]]
            delaymain = rightDelay[rightOrder[rightCount]]
        elif intention_keys.keys == 'escape':
            core.quit()

        thisExp.addData('ActualBallDirection', cond)
        thisExp.addData('ActualOnsetDelay', delaymain)
Flow
  Routine welcome_main
  LoopInitiator mainExpLoop loopType="TrialHandler"
    conditionsFile = cond_trial.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'trialNum': 1},
      {'trialNum': 2},
      {'trialNum': 3},
      {'trialNum': 4},
      {'trialNum': 5},
      {'trialNum': 6},
      {'trialNum': 7},
      {'trialNum': 8},
      {'trialNum': 9},
      {'trialNum': 10},
      {'trialNum': 11},
      {'trialNum': 12},
      {'trialNum': 13},
      {'trialNum': 14},
      {'trialNum': 15},
      {'trialNum': 16},
      {'trialNum': 17},
      {'trialNum': 18},
      {'trialNum': 19},
      {'trialNum': 20},
      {'trialNum': 21},
      {'trialNum': 22}]
    Routine intention_main
    Routine delay_main
    LoopInitiator motionLoop loopType="TrialHandler"
      conditionsFile = $'cond_' +cond +'_xpos.xlsx'
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine target_main
    LoopTerminator motionLoop
    Routine resp_main
    Routine feedback
    Routine rating_main
    Routine intention_check
  LoopTerminator mainExpLoop
  Routine thanks_2
