PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = 'data/%s/%s_%s' %(expInfo['Participant'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'Participant': '', 'Session': '', 'Block': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 720]
  expName = Interval_training
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Routines
  Routine welcome_main
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, event
        curPos = -0.5
      Begin Routine:
        event.Mouse(visible=False)
    TextComponent Instructions_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Welcome

        In this block, you will learn to report the time interval between your button click and the onset of the beep.

        On each trial  you have to click the "Down Arrow key " which will trigger an auditory beep.

        First 5 trials will be example of 0ms delay followed by 5 trials of 1000ms delay. Then you will get to the main training trails with delay varing betweem 0ms to 1000ms.

        You have to report the delay between your button click and the onset  of the beep by choosing the number between 0ms to 1000ms. After your judgement you will receive the feedback of the actual delay. You can use this feedback to improvise your judgement.


        Press SPACEBAR to continue.
    KeyboardComponent Inst_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedb
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  Routine target_main
    TextComponent Instructions_6
      letterHeight = 0.08
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      text = Click the Down Arrow button to listen to a beep?
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    SoundComponent Beep
      sound = beep-02.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
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  Routine resp_main
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, event
        timeTicks = range(1,2000)
      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))

        timeValue = 0;
      Each Frame:
        if timing_slider.getMarkerPos():
            timeValue = round(timing_slider.getMarkerPos(),0)
      End Routine:
        thisExp.addData('SubmittedTimeRating', timeValue)
    SliderComponent timing_slider
      forceEndRoutine = False
      granularity = 1
      labels = ('0ms', '1000ms')
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 0, 1000
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    ButtonComponent submit_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.09
      pos = (0, -0.7)
      size = (.3,.3)
      startVal [time (s)] = 0
      text = Submit
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    TextboxComponent Timetext
      bold = False
      editable = False
      letterHeight = 0.07
      pos = (0, -0.8)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = $str(timeValue) +"ms"
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    TextComponent timing_question
      letterHeight = 0.09
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
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      text:
        What was the delay between the buttonpress and the motion onset?
  Routine target
    PolygonComponent polygon_1
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      nVertices = 5
      shape = regular polygon...
      size = [4, 4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = cm
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  Routine fixation
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        curPos = -0.5;
      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
    TextComponent inten
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        +
    KeyboardComponent inten_key
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.60)
      size = [.2,.1]
      startVal [time (s)] = 0
      text = Click
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  Routine code_mouse
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        win.mouseVisible = False
  Routine thanks_2
    TextComponent Instructions_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Thanks for participating
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  Routine shape
    CodeComponent code_3
      Code Type = Auto->JS
      Begin Routine:
        event.Mouse(visible=True)
    PolygonComponent shape1
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      opacity [set every repeat] = $shape_s
      shape = rectangle
      size = [4,4]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent shape2
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      nVertices = 3
      opacity [set every repeat] = $shape_t
      shape = triangle
      size = [4,4]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent shape3
      fillColor = $[1.000,1.000,1.000]
      lineWidth = 4
      nVertices = 90
      opacity [set every repeat] = $shape_c
      shape = regular polygon...
      size = [4,4]
      startVal [time (s)] = 0.0
      units = cm
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    RatingScaleComponent wordcheck_rating
      categoryChoices = YOU, FRIEND, STRANGER
      forceEndRoutine = True
      high = 3
      low = 1
      pos = 0, -0.4
      scaleDescription = To which word this shape was associated?
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine delay
    TextComponent delay_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delay
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  Routine thanks
    TextComponent Thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks for participating
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  Routine Instruction_pracIB
    CodeComponent code_4
      Code Type = Auto->JS
      Begin Experiment:
        from psychopy import core, event
      Begin Routine:
        event.Mouse(visible=False)
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        The purpose of this short experiment is to familiarize you with the procedure of the main experiment and to the timing in milliseconds range.

        In this experiment, you have to report the time interval between your button click and the presentation of the shape on the screen.

        When you are ready you can click the button on the screen.

        After variable delay of your button click, you will see a pentagon on the screen.

        The timing of the delay is randomly chosen from 0ms to 2000ms. Only for this practice session, this delay will be selected in multiples of 100ms. but this will change in main experiment where it will can be any delay between 0ms to 2000ms.

        You are supposed to give your judgment in milliseconds by appropriately selecting your interval estimates in the rating scale using the mouse. After your response, actual delay in that trial will be shown to you. You can use that information to give the better judgment in the subsequent trials.

        Please use the feedback to learn about expressing the delay in milliseconds.

        Press SPACEBAR to continue
    KeyboardComponent Inst_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_mouse_on
    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        win.mouseVisible = True
  Routine response
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
      End Routine:
        event.Mouse(visible=False)
    RatingScaleComponent delay_rating
      forceEndRoutine = False
      high = 2000
      labels = 0ms, 2000ms
      low = 0
      markerStart = 1000
      pos = 0, -0.4
      scaleDescription = What was the delay between the keypress and the target?
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine delay_main
    TextComponent Instructions_5
      letterHeight = 0.08
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delaymain
      text = Click the Down Arrow button to listen to a beep?
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  Routine rating_main
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
        confidenceValue = 0;
      Each Frame:
        if confidenceScale.getMarkerPos():
            confidenceValue = confidenceScale.getMarkerPos()
            confidenceValue = round(confidenceValue)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    RatingScaleComponent main_shape_check
      disabled = True
      forceEndRoutine = True
      high = 6
      labels = No Control, Full Control
      low = 1
      pos = 0, -0.4
      scaleDescription = How much control did you feel in this trial?
      size = 1.0
      startVal [time (s)] = 0.0
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    SliderComponent confidenceScale
      forceEndRoutine = False
      granularity = 1
      labels = ("No control", "Full Control")
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 1,100
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    TextboxComponent confidence_txt
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.07
      pos = (0, -0.8)
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every frame] = $str(confidenceValue)
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    ButtonComponent condifence_submit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.09
      pos = (0, -0.7)
      size = (.3,.3)
      startVal [time (s)] = 0
      text = Submit
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    TextComponent Confidence_question
      letterHeight = 0.09
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
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      text:
        How much control did you feel in this trial?
  Routine intention_check
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        intentionCheck = " ";
      Begin Routine:
        event.Mouse(visible=True,newPos=(0,curPos))
      End Routine:
        if button_no.isClicked:
            intentionCheck = 'No'
        elif button_yes.isClicked:
            intentionCheck = 'Yes'

        if intention_keys.keys == 'left':
            lh[1] += 0.02;
            lpos[1]+=0.02/2;

        elif intention_keys.keys == 'right':
            rh[1] += 0.02;
            rpos[1]+=0.02/2;

        thisExp.addData('intentionCheck', intentionCheck);
    RatingScaleComponent intention_validation
      categoryChoices = No, Yes
      disabled = True
      forceEndRoutine = True
      high = 2
      labels = No, Yes
      low = 1
      pos = 0, -0.4
      scaleDescription = Did the ball move as you intended?
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent Instructions_4
      disabled = True
      letterHeight = 0.08
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
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      text:
        Did the ball move in the intended direction?

        NO                          YES
        (press ’n’)                  (press ‘y’)
    TextComponent only_Question
      letterHeight = 0.09
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
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      text:
        Did the ball move in the intended direction?
    KeyboardComponent intention_check_key
      allowedKeys = 'y','n'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_no
      bold = True
      fillColor = darkslategrey
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-.25, -0.6)
      size = [.3,.3]
      startVal [time (s)] = 0
      text =       No
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    ButtonComponent button_yes
      bold = True
      fillColor = darkslategrey
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (.25, -0.6)
      size = [.3,.3]
      startVal [time (s)] = 0
      text =     Yes
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  Routine feedback
    TextComponent feedback_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
      text [set every repeat] = $delayms
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  Routine intention_main
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, event
      Begin Routine:
        event.Mouse(visible=False,newPos=(0,curPos))
    TextComponent Instructions_3
      letterHeight = 0.08
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      text = Click the Down Arrow button to listen to a beep?
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    KeyboardComponent intention_keys
      allowedKeys = 'escape','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      disabled = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.16, 0.1)
      startVal [time (s)] = 0
      text = Click
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    CodeComponent code_13
      Code Type = Auto->JS
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      End Routine:
        if intention_keys.keys == 'escape':
            core.quit()

        cond = 'down'
        thisExp.addData('ActualBallDirection', cond)
  Routine MainBegin
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Main training Begins ...
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  Routine shortBegin
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Short example begins ...
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  Routine longBegin
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Long example begins ...
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Flow
  Routine welcome_main
  Routine shortBegin
  LoopInitiator shortExample loopType="TrialHandler"
    conditionsFile = cond_short.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delaymain': 0, 'delayms': '0ms'},
      {'delaymain': 0, 'delayms': '0ms'},
      {'delaymain': 0, 'delayms': '0ms'},
      {'delaymain': 0, 'delayms': '0ms'},
      {'delaymain': 0, 'delayms': '0ms'}]
    Routine intention_main
    Routine delay_main
    Routine target_main
    Routine feedback
  LoopTerminator shortExample
  Routine longBegin
  LoopInitiator LongExample loopType="TrialHandler"
    conditionsFile = cond_long.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delaymain': 1, 'delayms': '1000ms'},
      {'delaymain': 1, 'delayms': '1000ms'},
      {'delaymain': 1, 'delayms': '1000ms'},
      {'delaymain': 1, 'delayms': '1000ms'},
      {'delaymain': 1, 'delayms': '1000ms'}]
    Routine intention_main
    Routine delay_main
    Routine target_main
    Routine feedback
  LoopTerminator LongExample
  Routine MainBegin
  LoopInitiator mainExpLoop loopType="TrialHandler"
    conditionsFile = cond_LR_prac.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'delaymain': 0, 'delayms': '0ms'},
      {'delaymain': 0.1, 'delayms': '100ms'},
      {'delaymain': 0.2, 'delayms': '200ms'},
      {'delaymain': 0.3, 'delayms': '300ms'},
      {'delaymain': 0.4, 'delayms': '400ms'},
      {'delaymain': 0.5, 'delayms': '500ms'},
      {'delaymain': 0.6, 'delayms': '600ms'},
      {'delaymain': 0.7, 'delayms': '700ms'},
      {'delaymain': 0.8, 'delayms': '800ms'},
      {'delaymain': 0.9, 'delayms': '900ms'},
      {'delaymain': 1, 'delayms': '1000ms'}]
    Routine intention_main
    Routine delay_main
    Routine target_main
    Routine resp_main
    Routine feedback
  LoopTerminator mainExpLoop
  Routine thanks_2
